# 1 "/opt/topspin3.6.1/exp/stan/nmr/lists/pp/user/CLIP_15N_selhsqmbc"
; CLIP-HSQMBC f2hard
;
; 2D proton-selective 1H-13C CLIP-HSQMBC experiment 
;
;  J. Saurí, T. Parella, J.F. Espinosa, Org. Biomol. Chem., 11 (2013) 4473-4478
;  J. Saurí, M. Reibarkh, T. Zhang, R.D. Cohen, X. Wang, T.F. Molinski, G.E. Martin, R.T.
;  Williamson, Org. Lett., 18 (2016) 4786-4789.
;
; 2D proton-selective 1H–15N CLIP-HSQMBC experiment, hard pulse on the 2nd channel
; T-L Hwang, N. Yang, G. Cheng, Y. Chen, S. Cui, Magn. Reson. Chem., 2021
; https://doi.org/10.1002/mrc.5204
;

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

"p2=p1*2"
"d4=1s/(cnst2*4)"
"d11=30m"
"d0=3u"
"in0=inf1/2"
"DELTA1=50u+p16+d16"
"DELTA2=d4-larger(p12,p14)/2-50u-p16-d16"
"DELTA3=d4-larger(p12,p14)/2-50u-p16-d16-p16-4u"
"DELTA=p16+d16+50u+p2+d0*2"
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; dimension 2D; AQ_mode  (F1) Echo-Antiecho
define delay MCWRK
define delay MCREST
define delay d0orig
"d0orig=d0"
define list<loopcounter> SPARSELIST = <$NUSLIST>
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter STNCNT
"STNCNT=SPARSELIST.len/1"
"MCREST = d1 - d1"
"MCWRK = 0.052632*d1"

    dccorr
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1 ze
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LBLAV, MCWRK
  MCWRK
  "t1loop = SPARSELIST"
  MCWRK  SPARSELIST.inc
  MCWRK
  "ph1loop = 0"
      "d0=d0orig + t1loop * in0 "
      "phval3 = (t1loop * 180)%360"
      MCWRK ip3 + phval3
      "phval6 = (t1loop * 180)%360"
      MCWRK ip6 + phval6
      "phval31 = (t1loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph1loop * 1"
      MCWRK setgrad EA
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  d11
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2 MCWRK  * 7
LBLF1, MCWRK  * 11
LBLSTN, MCWRK pl1:f1
  MCREST
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3 (p1 ph1)
  50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
  p16:gp3
  d16
  DELTA2 pl2:f2 pl0:f1
  4u
  (center (p12:sp2 ph1) (p14 ph6):f2 )
  4u
  DELTA2 pl2:f2 pl1:f1
  50u
  p16:gp3
  d16
  (center (p1 ph2):f1 (p3 ph3):f2 )
  d0
  (p2 ph5)
  d0

  50u
  p16:gp1*EA
  d16 pl2:f2

  (p24 ph4):f2
  DELTA pl2:f2
  (p3 ph4):f2
  50u
  p16:gp4
  d16
  (p1 ph2):f1
  50u
  p16:gp5
  d16
  DELTA2 pl2:f2 pl0:f1
  (center (p12:sp2 ph1) (p14 ph1):f2 )
  DELTA3 pl2:f2 pl1:f1
  50u
  p16:gp5
  4u
  p16:gp2
  d16 setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
  (p3 ph1):f2
  go=2 ph31
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  MCWRK  wr #0 if #0 zd 

  MCWRK
  "ph1loop+=1"
      "d0=d0orig + t1loop * in0 "
      "phval3 = (t1loop * 180)%360"
      MCWRK ip3 + phval3
      "phval6 = (t1loop * 180)%360"
      MCWRK ip6 + phval6
      "phval31 = (t1loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph1loop * 1"
      MCWRK setgrad EA
  lo to LBLF1 times 2
  MCWRK 
  MCWRK
  "ph1loop-=2"
  MCWRK 

  MCWRK
  "t1loop = SPARSELIST"
  MCWRK  SPARSELIST.inc
  MCWRK
  "ph1loop = 0"
      "d0=d0orig + t1loop * in0 "
      "phval3 = (t1loop * 180)%360"
      MCWRK ip3 + phval3
      "phval6 = (t1loop * 180)%360"
      MCWRK ip6 + phval6
      "phval31 = (t1loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph1loop * 1"
      MCWRK setgrad EA
  lo to LBLSTN times STNCNT
  MCWRK rf #0 SPARSELIST.res
  lo to LBLAV times tdav
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  exit
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ph1=0
ph2=1
ph3=0 2
ph4=0
ph5=0
ph6=0
ph14=0
ph31=0 2

;pl0 : 0 W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;sp2: f1 channel - shaped pulse 180 degree for selective refocussing
;p1 : f1 channel - 90 degree high power pulse length
;p2 : f1 channel - 180 degree high power pulse length
;p3 : f2 channel - 90 degree high power pulse length
;p12: f1 channel - 180 degree shaped pulse length for selective refocussing
;p14: f2 channel - 180 degree pulse length for inversion
;p16: homospoil/gradient pulse
;p24: f2 channel - 180 degree pulse length for refocussing
;d0 : incremented delay (2D) [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4 nJXH)
;d11: delay for disk I/O [30 msec]
;d16: delay for homospoil/gradient recovery
;cnst2: = nJ(XH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;NS: 1 * n
;DS: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho

;use gradient ratio:
;gpz1: 80%
;gpz2: 20.1% for C-13, 8.1% for N-15
;gpz3: 33%
;gpz4: 50%
;gpz5: 17%
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;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100

