# 1 "C:/Bruker/TopSpin3.6.2/exp/stan/nmr/lists/pp/cosygpmfppqf"
;cosygpmfppqf
;avance-version (12/01/11)
;2D homonuclear shift correlation
;using gradient pulses for selection
;with multiple quantum filter according to gradient ratio
;use pulseprogram 'mqsgp1d2' for setup
;gradient ratio optimized for artifact suppression
;using purge pulses before d1
;
;A.A. Shaw, C. Salaun, J.-F. Dauphin & B. Ancian, 
;   J. Magn. Reson. A 120, 110-115 (1996)
;B. Ancian, I. Bourgeois, J.-F. Dauphin & A.A. Shaw,
;   J. Magn. Reson. A 125, 348- 354 (1997)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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"d11=30m"
"d12=20u"
"d13=4u"


"in0=inf1"
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; dimension 2D; AQ_mode  (F1) QF
define delay MCWRK
define delay MCREST
define delay d0orig
"d0orig=d0"
define list<loopcounter> SPARSELIST = <$NUSLIST>
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter STNCNT
"STNCNT=SPARSELIST.len/1"
"MCREST = d11 - d11"
"MCWRK = 0.250000*d11"

    dccorr
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1 ze
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LBLAV, MCWRK
  MCWRK
  "t1loop = SPARSELIST"
  MCWRK  SPARSELIST.inc
      "d0=d0orig + t1loop * in0 "
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2 MCWRK  * 3
LBLSTN, MCWRK
  MCREST
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3 d12 pl10:f1
  p17 ph4
  p17*2 ph5
  d1 pl1:f1

  p1 ph1
  d0
  50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
  p16:gp1
  d16
  p1 ph2
  d13
  p16:gp2
  d16
  p1 ph3
  d13
  p16:gp3
  d16
  4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
  go=2 ph31
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  MCWRK  wr #0 if #0 zd 

  MCWRK
  "t1loop = SPARSELIST"
  MCWRK  SPARSELIST.inc
      "d0=d0orig + t1loop * in0 "
  lo to LBLSTN times STNCNT
  MCWRK rf #0 SPARSELIST.res
  lo to LBLAV times tdav
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exit
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ph1=0 2
ph2=0 
ph3=0 
ph4=0 
ph5=1 
ph31=0 2 


;pl1 : f1 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;p1 : f1 channel -  90 degree high power pulse
;p16: homospoil/gradient pulse
;p17: f1 channel - trim pulse                        [2.5 msec]
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d12: delay for power switching                      [20 usec]
;d11: delay for disk I/O                             [30 msec]
;d13: short delay                                    [4 usec]
;d16: delay for homospoil/gradient recovery
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 1 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF
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;use gradient ratio:	gp 1 : gp 2 : gp 3
;			  16 :   12 :   40    for dq filter
;			   4 :   12 :   40    for tq filter

;for z-only gradients:
;gpz1: 16% for DQF, 4% for TQF
;gpz2: 12%
;gpz3: 40%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
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;$Id: cosygpmfppqf,v 1.2 2012/01/31 17:49:22 ber Exp $
